[
    {
        "object.className": "ProtImportMovies",
        "object.id": "719",
        "object.label": "pwem - import movies",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "importFrom": 0,
        "filesPath": "/msg/data8/krios2/",
        "filesPattern": "*.tif",
        "copyFiles": false,
        "haveDataBeenPhaseFlipped": false,
        "acquisitionWizard": null,
        "voltage": 300.0,
        "sphericalAberration": 2.7,
        "amplitudeContrast": 0.1,
        "magnification": 18518,
        "samplingRateMode": 0,
        "samplingRate": 1.378,
        "scannedPixelSize": 7.0,
        "doseInitial": 0.0,
        "dosePerFrame": 0.2,
        "gainFile": "/msg/data8/scratch/",
        "darkFile": null,
        "dataStreaming": true,
        "timeout": 43200,
        "fileTimeout": 30,
        "blacklistDateFrom": null,
        "blacklistDateTo": null,
        "useRegexps": true,
        "blacklistFile": null,
        "inputIndividualFrames": false,
        "numberOfIndividualFrames": null,
        "stackFrames": false,
        "writeMoviesInProject": false,
        "movieSuffix": "_frames.mrcs",
        "deleteFrames": false
    },
    {
        "object.className": "ProtMotionCorr",
        "object.id": "783",
        "object.label": "motioncorr - movie alignment",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "doSaveAveMic": true,
        "useAlignToSum": true,
        "alignFrame0": 1,
        "alignFrameN": 14,
        "binFactor": 1.0,
        "cropOffsetX": 0,
        "cropOffsetY": 0,
        "cropDimX": 0,
        "cropDimY": 0,
        "splitEvenOdd": false,
        "doSaveMovie": false,
        "doComputePSD": false,
        "doComputeMicThumbnail": false,
        "extraProtocolParams": "",
        "gpuList": "0 1 2 3",
        "doApplyDoseFilter": false,
        "patchX": 7,
        "patchY": 5,
        "patchOverlap": 0,
        "group": 1,
        "groupLocal": 4,
        "tol": 0.2,
        "doSaveUnweightedMic": false,
        "extraParams2": "",
        "gainRot": 0,
        "gainFlip": 0,
        "defectFile": null,
        "defectMap": null,
        "EERtext": null,
        "eerGroup": 32,
        "eerSampling": 0,
        "doMagCor": false,
        "scaleMaj": 1.0,
        "scaleMin": 1.0,
        "angDist": 0.0,
        "hostName": "localhost",
        "numberOfThreads": 4,
        "numberOfMpi": 1,
        "inputMovies": "719.outputMovies"
    },
    {
        "object.className": "ProtComposeTS",
        "object.id": "850",
        "object.label": "tomo - Compose Tilt Serie",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "filesPath": "/msg/data8/krios2/",
        "mdocPattern": "*.mdoc",
        "excludedWords": "_tgt_",
        "mdoc_bug_Correction": false,
        "dataStreaming": true,
        "time4NextTilt": 10,
        "time4NextTS": 180,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "inputMicrographs": "783.outputMicrographs"
    },
    {
        "object.className": "ProtAreTomoAlignRecon",
        "object.id": "889",
        "object.label": "aretomo - tilt-series align and reconstruct",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "tiltAxisAngle": 0.0,
        "skipAlign": false,
        "makeTomo": true,
        "saveStack": true,
        "useInputProt": false,
        "binFactor": 8,
        "alignZ": 800,
        "tomoThickness": 3000,
        "refineTiltAngles": 1,
        "refineTiltAxis": 1,
        "doDW": true,
        "reconMethod": 0,
        "SARTiter": 15,
        "SARTproj": 5,
        "flipInt": false,
        "flipVol": true,
        "roiArea": "",
        "sampleType": 0,
        "coordsFn": "",
        "patchX": 5,
        "patchY": 5,
        "darkTol": 0.7,
        "extraParams": "-OutImod 1",
        "gpuList": "7",
        "hostName": "localhost",
        "numberOfThreads": 10,
        "numberOfMpi": 1,
        "inputSetOfTiltSeries": "850.TiltSeries"
    }
]